<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.0.2">
  <Workflow xmlns:q1="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:xsd="http://www.w3.org/2001/XMLSchema" xmlns:q2="clr-namespace:Bonsai.IO;assembly=Bonsai.System" xmlns="https://horizongir.org/bonsai">
    <Nodes>
      <Expression xsi:type="Source">
        <PropertyMappings />
        <Generator xsi:type="q1:FileCapture">
          <q1:FileName>C:\Users\Public\Videos\Recordings Fly Tracker Prject\Exp 0003\0003A01R06Cam01P0WT-CantonS.avi</q1:FileName>
          <q1:PlaybackRate>500</q1:PlaybackRate>
          <q1:Loop>false</q1:Loop>
          <q1:Playing>true</q1:Playing>
        </Generator>
      </Expression>
      <Expression xsi:type="Source">
        <PropertyMappings />
        <Generator xsi:type="q1:LoadImage">
          <q1:FileName>C:\Users\Vero\Dropbox (Behavior&amp;Metabolism)\Personal\Scripts\Tracking Scripts\mask.png</q1:FileName>
          <q1:Mode>Unchanged</q1:Mode>
        </Generator>
      </Expression>
      <Expression xsi:type="Combinator">
        <PropertyMappings />
        <Combinator xsi:type="q1:Threshold">
          <q1:ThresholdValue>130</q1:ThresholdValue>
          <q1:MaxValue>255</q1:MaxValue>
          <q1:ThresholdType>BinaryInv</q1:ThresholdType>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <PropertyMappings />
        <Combinator xsi:type="q1:Grayscale" />
      </Expression>
      <Expression xsi:type="Combinator">
        <PropertyMappings />
        <Combinator xsi:type="CombineLatest" />
      </Expression>
      <Expression xsi:type="Combinator">
        <PropertyMappings />
        <Combinator xsi:type="q1:Mask" />
      </Expression>
      <Expression xsi:type="Combinator">
        <PropertyMappings />
        <Combinator xsi:type="q1:Crop">
          <q1:RegionOfInterest>
            <q1:X>0</q1:X>
            <q1:Y>0</q1:Y>
            <q1:Width>456</q1:Width>
            <q1:Height>463</q1:Height>
          </q1:RegionOfInterest>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <PropertyMappings />
        <Combinator xsi:type="q1:Crop">
          <q1:RegionOfInterest>
            <q1:X>455</q1:X>
            <q1:Y>0</q1:Y>
            <q1:Width>476</q1:Width>
            <q1:Height>463</q1:Height>
          </q1:RegionOfInterest>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <PropertyMappings />
        <Combinator xsi:type="q1:Crop">
          <q1:RegionOfInterest>
            <q1:X>931</q1:X>
            <q1:Y>0</q1:Y>
            <q1:Width>468</q1:Width>
            <q1:Height>463</q1:Height>
          </q1:RegionOfInterest>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <PropertyMappings />
        <Combinator xsi:type="q1:FindContours">
          <q1:Mode>External</q1:Mode>
          <q1:Method>ChainApproxNone</q1:Method>
          <q1:Offset>
            <q1:X>0</q1:X>
            <q1:Y>0</q1:Y>
          </q1:Offset>
          <q1:MinArea>0</q1:MinArea>
          <q1:MaxArea xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <PropertyMappings />
        <Combinator xsi:type="q1:FindContours">
          <q1:Mode>External</q1:Mode>
          <q1:Method>ChainApproxNone</q1:Method>
          <q1:Offset>
            <q1:X>0</q1:X>
            <q1:Y>0</q1:Y>
          </q1:Offset>
          <q1:MinArea>0</q1:MinArea>
          <q1:MaxArea xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <PropertyMappings />
        <Combinator xsi:type="q1:FindContours">
          <q1:Mode>External</q1:Mode>
          <q1:Method>ChainApproxNone</q1:Method>
          <q1:Offset>
            <q1:X>0</q1:X>
            <q1:Y>0</q1:Y>
          </q1:Offset>
          <q1:MinArea>0</q1:MinArea>
          <q1:MaxArea xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <PropertyMappings />
        <Combinator xsi:type="q1:BinaryRegionAnalysis" />
      </Expression>
      <Expression xsi:type="Combinator">
        <PropertyMappings />
        <Combinator xsi:type="q1:BinaryRegionAnalysis" />
      </Expression>
      <Expression xsi:type="Combinator">
        <PropertyMappings />
        <Combinator xsi:type="q1:BinaryRegionAnalysis" />
      </Expression>
      <Expression xsi:type="Combinator">
        <PropertyMappings />
        <Combinator xsi:type="q1:LargestBinaryRegion" />
      </Expression>
      <Expression xsi:type="Combinator">
        <PropertyMappings />
        <Combinator xsi:type="q1:LargestBinaryRegion" />
      </Expression>
      <Expression xsi:type="Combinator">
        <PropertyMappings />
        <Combinator xsi:type="q1:LargestBinaryRegion" />
      </Expression>
      <Expression xsi:type="Combinator">
        <PropertyMappings />
        <Combinator xsi:type="Zip" />
      </Expression>
      <Expression xsi:type="q2:CsvWriter">
        <q2:PropertyMappings />
        <q2:FileName>C:\Users\Vero\Bonsai tracking\Exp 0003\0003A01R06Cam01P0WT-CantonS_test2.csv</q2:FileName>
        <q2:Append>false</q2:Append>
        <q2:Suffix>None</q2:Suffix>
        <q2:IncludeHeader>false</q2:IncludeHeader>
      </Expression>
    </Nodes>
    <Edges>
      <Edge>
        <From>0</From>
        <To>3</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>1</From>
        <To>4</To>
        <Label>Source2</Label>
      </Edge>
      <Edge>
        <From>2</From>
        <To>4</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>3</From>
        <To>2</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>4</From>
        <To>5</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>5</From>
        <To>6</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>5</From>
        <To>7</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>5</From>
        <To>8</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>6</From>
        <To>11</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>7</From>
        <To>10</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>8</From>
        <To>9</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>9</From>
        <To>14</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>10</From>
        <To>13</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>11</From>
        <To>12</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>12</From>
        <To>15</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>13</From>
        <To>16</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>14</From>
        <To>17</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>15</From>
        <To>18</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>16</From>
        <To>18</To>
        <Label>Source2</Label>
      </Edge>
      <Edge>
        <From>17</From>
        <To>18</To>
        <Label>Source3</Label>
      </Edge>
      <Edge>
        <From>18</From>
        <To>19</To>
        <Label>Source1</Label>
      </Edge>
    </Edges>
  </Workflow>
  <ExtensionTypes>
    <Type>Bonsai.Vision.FileCapture, Bonsai.Vision, Version=2.0.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.LoadImage, Bonsai.Vision, Version=2.0.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.Threshold, Bonsai.Vision, Version=2.0.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.Grayscale, Bonsai.Vision, Version=2.0.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.CombineLatest, Bonsai.Core, Version=2.0.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.Mask, Bonsai.Vision, Version=2.0.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.Crop, Bonsai.Vision, Version=2.0.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.FindContours, Bonsai.Vision, Version=2.0.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.BinaryRegionAnalysis, Bonsai.Vision, Version=2.0.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.LargestBinaryRegion, Bonsai.Vision, Version=2.0.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Zip, Bonsai.Core, Version=2.0.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.IO.CsvWriter, Bonsai.System, Version=2.0.0.0, Culture=neutral, PublicKeyToken=null</Type>
  </ExtensionTypes>
</WorkflowBuilder>